# Generated by Configurator on Wed Mar 18 13:02:09 CET 2015

# Reset
Property,Core,Initialize,0

# Devices
Device,DHub,DemoCamera,DHub
Device,DCam,DemoCamera,DCam
Device,Twister,DemoCamera,DStage
Device,XY,DemoCamera,DXYStage
Device,DShutter,DemoCamera,DShutter
Device,DHub-1,DemoCamera,DHub
Device,Z,DemoCamera,DStage

# Pre-init settings for devices
Property,DCam,MaximumExposureMs,10000.0000

# Pre-init settings for COM ports

# Hub (parent) references
Parent,DCam,DHub
Parent,Twister,DHub
Parent,XY,DHub
Parent,DShutter,DHub
Parent,Z,DHub-1

# Initialize
Property,Core,Initialize,1

# Delays

# Roles
Property,Core,Camera,DCam
Property,Core,Shutter,DShutter
Property,Core,Focus,Z
Property,Core,AutoShutter,1

# Camera-synchronized devices

# Labels

# Configuration presets
# Group: Channel

# Group: System
# Preset: Startup



# PixelSize settings

